# 1 "/opt/topspin3.8.0/exp/stan/nmr/lists/pp/user/hsqct2etf3gptcwg3d.rav"
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;hsqct2etf3gptcwg3d
;avance-version (13/12/11)
;3D H-1/X correlation via double inept transfer
;for measuring N-15 T2 relaxation times
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;water suppression using watergate sequence
;using flip-back pulse
;as pseudo3D
;with temperature compensation
;(use parameterset )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>
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

define list<loopcounter> cpmglist=<$VCLIST>
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define loopcounter vc_max

define loopcounter COUNTER1
define loopcounter COUNTER2

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"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d25=1s/(cnst4*cnst12)"
"d26=1s/(cnst4*4)"


"d21=750u"
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"d31=(p30*16+d21*32)"

		
"d10=3u"

"in10=inf2/2"
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"DELTA=d25-larger(p22,p44)/2"
"DELTA2=d21-p44/2"
"DELTA3=d26-p16-d16-p11-p1*2/PI-8u"
"DELTA4=d26-p16-d16-p11-de-8u"


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"DELTA1=d25-p44-d10*2-p21*4/PI"


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"l3=td1"
"l11=0"
"l31=0"


"spoff1=0"
"spoff13=bf2*((cnst21+cnst22)/2000000)-o2"
"spoff30=0"
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"acqt0=0"
baseopt_echo


aqseq 312
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; dimension 3D; AQ_mode  (F2) QF (F1) States-TPPI
define delay MCWRK
define delay MCREST
define loopcounter l11orig
"l11orig=l11"
define delay d10orig
"d10orig=d10"
define loopcounter t2loop
"t2loop=0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ph2loop
"ph2loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td2 / 2)"
define loopcounter ST2CNT
"ST2CNT = trunc(td1 / 1)"
"MCREST = d11 - d11"
"MCWRK = 0.125000*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * -90"
      MCWRK ip4 + phval4
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  d11 pl16:f3

  "vc_max = 0"

9 20u
  if "cpmglist > vc_max"
     {
     20u
     "vc_max=cpmglist"
     }
  
  3m cpmglist.inc
  lo to 9 times l3
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  3m cpmglist.res

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2 MCWRK  * 2 do:f3
LBLST2, MCWRK  * 3
LBLF1, MCWRK  * 2
LBLST1, MCWRK 
  MCREST
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  20u
  "l31=cpmglist[l11]"
  20u
  "COUNTER1=l31"
  20u
  "COUNTER2=vc_max-l31"
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  20u pl23:f3

8 d21
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  DELTA2
  (p44:sp30 ph1)
  DELTA2
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  d21

	d21
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  DELTA2
  (p44:sp30 ph8)
  DELTA2
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  d21
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  lo to 8 times COUNTER2

  d1 pl1:f1

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  (p1 ph2)
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  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph3):f3
  DELTA 
  (center (p44:sp30 ph1) (p22 ph6):f3 )
  DELTA pl23:f3

6 d21
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  DELTA2
  (p44:sp30 ph1)
  DELTA2
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  d21
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	d21
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  DELTA2
  (p44:sp30 ph8)
  DELTA2
  (p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6 d21*2 p30 ph6):f3
  d21

  lo to 6 times COUNTER1

  d25 pl3:f3
  (p22 ph6):f3
  d10 
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  (p44:sp30 ph7)


  d10
  DELTA1
  (p21 ph4):f3
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  p16:gp3
  d16
  (p11:sp1 ph5):f1
  2u
  2u pl1:f1

  (p1 ph1) 
  4u
  p16:gp4
  d16
  DELTA3
  (p11:sp1 ph5):f1
  2u
  2u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph5):f1
  DELTA4
  p16:gp4
  d16 pl16:f3
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 cpd3:f3
  
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  MCWRK  do:f3 wr #0 if #0 zd 

  "t1loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * -90"
      MCWRK ip4 + phval4
  lo to LBLST2 times ST2CNT
  MCWRK 
  "t1loop=0"
  MCWRK 

  "ph2loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * -90"
      MCWRK ip4 + phval4
  lo to LBLF1 times 2
  MCWRK 

  "t2loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * -90"
      MCWRK ip4 + phval4
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t2loop=0"
  "ph2loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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  d31
exit
   
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ph0=0 
ph1=0 
ph2=1
ph3=0 2 
ph4=0 0 2 2
ph5=2
ph6=0 0 0 0 2 2 2 2
ph7=0 0 2 2
ph8=2
ph31=0 2 2 0
  

;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;pl23: f3 channel - power level for TOCSY-spinlock
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p30: f3 channel - 180 degree pulse at pl23
;p44: f1 channel - 180 degree shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d10 : incremented delay                             [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: echo delay                                     [450 usec]
;d25: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;d31: length of single cpmg loop
;cnst4: = J(YH)
;cnst12: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;vc : variable loop-coounter for T2 delay, taken from vc-list
;inf2: 1/SW(X) = 2 * DW(X)
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of delays in vc-list
;td2: number of experiments in F2
;FnMODE: QF in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence

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;for z-only gradients:
;gpz1: 50%
;gpz3: 60%
;gpz4: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100

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                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


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;$Id: hsqct2etf3gptcwg3d,v 1.2.2.1 2014/01/17 15:19:19 ber Exp $
