# 1 "/opt/topspin3.8.0/exp/stan/nmr/lists/pp/user/hsqct1etf3gptcwg3d.rav"
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;hsqct1etf3gptcwg3d
;avance-version (13/12/11)
;3D H-1/X correlation via double inept transfer
;for measuring N-15 T1 relaxation times
;phase sensitive
;with decoupling during acquisition
;using f3 - channel
;water suppression using watergate sequence
;using flip-back pulse
;using H-1 180o pulses rather than cpd decoupling
;as pseudo3D
;with temperature compensation
;(use parameterset )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>
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

define list<delay> vd_list=<$VDLIST>
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define delay vd_max

define loopcounter COUNTER1
define loopcounter COUNTER2

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"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d25=1s/(cnst4*cnst12)"
"d26=1s/(cnst4*4)"

"d31=0"

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"d30=10m"


"d10=3u"
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"in10=inf2/2"

"DELTA=d25-larger(p22,p44)/2"
"DELTA2=d26-p16-d16-p11-p1*2/PI-8u"
"DELTA3=d26-p16-d16-p11-de-8u"

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"DELTA4=2.5m-p44/2"
"DELTA5=2.5m-p44/2-p16-d16-4u"


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"DELTA1=d25-p44-d10*2"


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"l3=td1"
"l11=0"


"spoff1=0"
"spoff13=bf2*((cnst21+cnst22)/2000000)-o2"
"spoff30=0"
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"acqt0=0"
baseopt_echo


aqseq 312
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; dimension 3D; AQ_mode  (F2) QF (F1) States-TPPI
define delay MCWRK
define delay MCREST
define loopcounter l11orig
"l11orig=l11"
define delay d10orig
"d10orig=d10"
define loopcounter t2loop
"t2loop=0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ph2loop
"ph2loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td2 / 2)"
define loopcounter ST2CNT
"ST2CNT = trunc(td1 / 1)"
"MCREST = d11 - d11"
"MCWRK = 0.090909*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
      "phval5 = (ph2loop % 4) * 90"
      MCWRK ip5 + phval5
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  d11 pl16:f3

  "vd_max = 0"

9 20u
  if "vd_list > vd_max"
     {
     20u
     "vd_max = vd_list"
     }
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  3m vd_list.inc
  lo to 9 times l3

  3m vd_list.res

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2 MCWRK  * 3 do:f3
LBLST2, MCWRK  * 4
LBLF1, MCWRK  * 3
LBLST1, MCWRK 
  MCREST
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  
  20u
  "d31=vd_list[l11]"
  20u
  "COUNTER1=( (d31) / d30 )"
  20u
  "COUNTER2=( (vd_max - d31) / d30 )"
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8 DELTA4
  (p44:sp30 ph1)
  DELTA4
  DELTA4
  (p44:sp30 ph10)
  DELTA4
  lo to 8 times COUNTER2

  d1 pl1:f1

  (p1 ph1)
  d26 pl3:f3
  (center (p2 ph1) (p22 ph1):f3 )
  d26 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  (p1 ph2)
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  4u
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16

  (p21 ph3):f3
  DELTA
  (center (p44:sp30 ph1) (p22 ph1):f3  )
  DELTA
  (p21 ph2):f3

  DELTA4
  (p44:sp30 ph10)
  DELTA4
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6 DELTA4
  (p44:sp30 ph1)
  DELTA4
  DELTA4
  (p44:sp30 ph10)
  DELTA4
  lo to 6 times COUNTER1

  DELTA4
  (p44:sp30 ph1)
  4u
  p16:gp2
  d16
  DELTA5

  (p21 ph4):f3
  d25
  (p22 ph5):f3
  d10
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  (p44:sp30 ph9)


  d10
  DELTA1
  (p21 ph6):f3
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  p16:gp3
  d16
  (p11:sp1 ph8):f1
  2u
  2u pl1:f1

  (p1 ph1) 
  4u
  p16:gp4
  d16
  DELTA2
  (p11:sp1 ph8):f1
  2u
  2u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph8):f1
  DELTA3
  p16:gp4
  d16 pl16:f3
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 cpd3:f3

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  MCWRK  do:f3 wr #0 if #0 zd 

  "t1loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
      "phval5 = (ph2loop % 4) * 90"
      MCWRK ip5 + phval5
  lo to LBLST2 times ST2CNT
  MCWRK 
  "t1loop=0"
  MCWRK 

  "ph2loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
      "phval5 = (ph2loop % 4) * 90"
      MCWRK ip5 + phval5
  lo to LBLF1 times 2
  MCWRK 

  "t2loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
      "phval5 = (ph2loop % 4) * 90"
      MCWRK ip5 + phval5
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t2loop=0"
  "ph2loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
   
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ph1=0 
ph2=1
ph3=0 0 0 0 2 2 2 2 
ph4=1 3
ph5=0
ph6=0 0 2 2
ph7=3
ph8=2
ph9=0 0 2 2
ph10=2
ph31=0 2 2 0 2 0 0 2
  

;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;sp30: f1 channel - shaped pulse 180 degree (Bip720,50,20.1)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p44: f1 channel - 180 degree shaped pulse
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay                              [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d25: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;vd : variable delay, taken from vd-list
;cnst4: = J(YH)
;cnst12: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;inf2: 1/SW(X) = 2 * DW(X)
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 8 * n
;ds: >= 16
;td1: number of delays in vd-list
;td2: number of experiments in F2
;FnMODE: QF in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence

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;for z-only gradients:
;gpz1: 50%
;gpz2: 40%
;gpz3: 60%
;gpz4: 30%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100

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                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


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;$Id: hsqct1etf3gptcwg3d,v 1.2.2.1 2014/01/17 15:19:19 ber Exp $
