# 1 "/opt/topspin3.8.0/exp/stan/nmr/lists/pp/hsqcnoef3gpwg3d"
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;hsqcnoef3gpwg3d
;avance-version (13/12/11)
;3D H-1/X correlation via double inept transfer
;for measuring H1-N15 NOEs
;phase sensitive 
;with decoupling during acquisition
;using f3 - channel
;water suppression using watergate sequence
;recording NONOE and NOE as pseudo3D
;(use parameterset )
;
;$CLASS=HighRes
;$DIM=3D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>
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"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d12=20u"
"d25=1s/(cnst4*cnst12)"
"d26=1s/(cnst4*4)"

"p0=p1*4/3"

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"d10=3u"

"in10=inf2/2"

		
"DELTA3=d26-p16-d16-p11-p1*2/PI-8u"
"DELTA4=d26-p16-d16-p11-de-8u"
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"DELTA1=d25+p2/2+d10"
"DELTA2=d25-p2/2-d10"


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"l4=d1/(p0+5m)"
"l11=0"


"spoff1=0"
"spoff13=bf2*((cnst21+cnst22)/2000000)-o2"
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"acqt0=0"
baseopt_echo


aqseq 312
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; dimension 3D; AQ_mode  (F2) QF (F1) States-TPPI
define delay MCWRK
define delay MCREST
define loopcounter l11orig
"l11orig=l11"
define delay d10orig
"d10orig=d10"
define loopcounter t2loop
"t2loop=0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ph2loop
"ph2loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td2 / 2)"
define loopcounter ST2CNT
"ST2CNT = trunc(td1 / 1)"
"MCREST = d11 - d11"
"MCWRK = 0.090909*d11"

    dccorr
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1 ze
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LBLAV, MCWRK
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval3 = (ph2loop % 4) * 90"
      MCWRK ip3 + phval3
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
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  d11 pl1:f1 pl16:f3
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2 MCWRK  * 3 do:f3
LBLST2, MCWRK  * 4
LBLF1, MCWRK  * 3
LBLST1, MCWRK 
  MCREST
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3 d12 pl1:f1

  if "l11 %2 == 0"
     {
     d1
     50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
     4u
     (p11:sp1 ph1:r):f1
     4u
     4u pl1:f1
     }
  else
     {
4    (p0 ph1)
     5m
     lo to 4 times l4
     4u
     50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
     }

  (p1 ph1)
  p16:gp1
  d16 pl3:f3
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  (p21 ph3):f3
  DELTA1
  (p22 ph4):f3
  d10 


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  (p2 ph7)


  d10
  DELTA2
  (p21 ph5):f3
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  p16:gp2
  d16
  (p11:sp1 ph6):f1
  2u
  2u pl1:f1

  (p1 ph1) 
  4u
  p16:gp3
  d16
  DELTA3
  (p11:sp1 ph6):f1
  2u
  2u pl1:f1
  (center (p2 ph1) (p22 ph1):f3 )
  4u
  (p11:sp1 ph6):f1
  DELTA4
  p16:gp3
  d16 pl16:f3
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 cpd3:f3
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  MCWRK  do:f3 wr #0 if #0 zd 

  "t1loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval3 = (ph2loop % 4) * 90"
      MCWRK ip3 + phval3
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
  lo to LBLST2 times ST2CNT
  MCWRK 
  "t1loop=0"
  MCWRK 

  "ph2loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval3 = (ph2loop % 4) * 90"
      MCWRK ip3 + phval3
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
  lo to LBLF1 times 2
  MCWRK 

  "t2loop+=1"
      "l11 = l11orig + t1loop * 1"

      "d10=d10orig + t2loop * in10 "
      "phval3 = (ph2loop % 4) * 90"
      MCWRK ip3 + phval3
      "phval4 = (ph2loop % 4) * 90"
      MCWRK ip4 + phval4
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t2loop=0"
  "ph2loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
   

ph1=0 
ph2=1
ph3=1 3 
ph4=0
ph5=0 0 0 0 2 2 2 2
ph6=2
ph7=0 0 2 2
ph31=0 2 0 2 2 0 2 0
  
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;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1 : f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp13: f2 channel - shaped pulse 180 degree  (Ca and C=O, adiabatic)
;p0 : f1 channel - 120 degree high power pulse
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse           [1 msec]
;p16: homospoil/gradient pulse
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d10: incremented delay (F2 in 3D)                   [3 usec]
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d25: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;cnst4: = J(YH)
;cnst12: for multiplicity selection = 4 for NH, 8 for all multiplicities
;cnst21: CO chemical shift (offset, in ppm)
;cnst22: Calpha chemical shift (offset, in ppm)
;l4: loop for saturation sequence: = d1 / (p0 + 5m)
;inf2: 1/SW(X) = 2 * DW(X)
;in10: 1/(2 * SW(X)) = DW(X)
;nd10: 2
;ns: 4 * n
;ds: >= 16
;td1: = 2
;td2: number of experiments in F2
;FnMODE: QF in F1
;FnMODE: States-TPPI (or TPPI) in F2
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 50%
;gpz2: 60%
;gpz3: 30%
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;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end
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;$Id: hsqcnoef3gpwg3d,v 1.3.2.1 2014/01/17 15:19:19 ber Exp $
